PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = UM_3T_Proj
  Screen = 1
  Units = pix
  Window size (pixels) = [1800, 1169]
  expName = test_var_slip_singleloop_retinotopy_tr1p0_3hz
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine wait_block
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from PIL import Image

        # For TR, 1.5s, 0.25s stim duration, repeat 6 times
        # For TR 1.0, with 0.3333 durationn, 3 repeats
        stim_dur = 0.33333333
        mask_repeats = 3

        # 260 is the number of masks
        total_repeats = 300 * mask_repeats

        number_of_rg_switches = 15

        # preload the images, we are using the start ix to do this.


        # Path to the image folder
        image_folder = "./raw_stim/"
        mask_folder = "./bars_nyu/"
        preloaded_images = []
        preloaded_masks = []
        # List all image files (ensure sorted order if needed)
        image_files = sorted([f for f in os.listdir(image_folder) if f.endswith('.png')])
        mask_files = sorted([f for f in os.listdir(mask_folder) if f.endswith('.png')])

        for img_file in image_files:
            img_path = os.path.join(image_folder, img_file)
            # Ensure RGB format
            pil_img = Image.open(img_path)
            img_array = np.array(pil_img, order = "C").astype(float) / 255.0

            # Append to the list
            # flip it vertically so it shows up correctly.
            preloaded_images.append(np.flipud(img_array))


        mask_files = [x for x in mask_files for _ in range(mask_repeats)]


        def alternating_blocks(a, b, length, n_switches):
            n_blocks = n_switches + 1
            block_size = length // n_blocks

            values = [a, b] * ((n_blocks + 1) // 2)
            values = values[:n_blocks]

            lst = []
            for v in values:
                lst.extend([v] * block_size)

            # pad remainder if length not divisible
            remainder = length - len(lst)
            if remainder > 0:
                lst.extend([values[-1]] * remainder)

            return lst

        color_list = alternating_blocks("red", "green", length=total_repeats, n_switches=number_of_rg_switches)

        # 20260225 - we now load masks on the fly - slower, but works easier. Preload images still, mask live.
        #for m_file in mask_files:
        #    mask_path = os.path.join(mask_folder, m_file)
        #    pil_mask = Image.open(mask_path)
        #    mask_array = np.array(pil_mask.convert("L")) #.astype(float) / 255.0
        #    preloaded_masks.append(mask_array)

        # rep preloaded masks, so each one repeats 6 times.
        #preloaded_masks = [x for x in preloaded_masks for _ in range(mask_repeats)]
      Begin Experiment:
        count = 1
    KeyboardComponent wait_trigger
      allowedKeys = '5'
      durationEstim = 15
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 40
      startVal [time (s)] = 0.0
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      text:
        Waiting for trigger
  Routine PreStimISI
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    TextComponent text
      durationEstim = 2.940
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent isi_looper
      allowedKeys = '5'
      durationEstim = 2.940
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retino_stim_loop
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # select out 12 of the stimuli at once
        # this ensures that we have no repeates.

        stim_ixs = np.random.randint(0, 100, size=13).tolist()

        # mask_img = preloaded_masks.pop(0)

        # I think I did this because it had to be a file, not an array?
        # mask_img = f"./masks/mask{count:03d}.png"
        mask_img = mask_folder + mask_files.pop(0)
        stim_color = color_list.pop()
        # count = count +1
      End Routine:
        thisExp.addData('color', stim_color)
    ImageComponent ret_stim_01
      image [set every repeat] = $preloaded_images[stim_ixs.pop()]
      mask [set every repeat] = $mask_img
      size = (1080, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stim_dur
      texture resolution = 512
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    ImageComponent fixation_background
      image [set every repeat] = resized_image.png
      opacity = 0.2
      size = (1080, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stim_dur
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    PolygonComponent polygon
      fillColor [set every repeat] = $stim_color
      lineColor [set every repeat] = $stim_color
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stim_dur
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stim_dur
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  Routine within_retino_block_isi
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    TextComponent text_2
      durationEstim = 2.940
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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Flow
  Routine wait_block
  LoopInitiator show_retino loopType="TrialHandler"
    loopType = sequential
    nReps = total_repeats
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    conditions:
      [{'p1': './pframes/pframe00001.png', 'p2': './pframes/pframe00002.png', 'p3': './pframes/pframe00003.png', 'p4': './pframes/pframe00004.png', 'p5': './pframes/pframe00005.png', 'p6': './pframes/pframe00006.png', 'p7': './pframes/pframe00007.png', 'p8': './pframes/pframe00008.png', 'p9': './pframes/pframe00009.png', 'p10': './pframes/pframe00010.png', 'p11': './pframes/pframe00011.png', 'p12': './pframes/pframe00012.png'},
      {'p1': './pframes/pframe00013.png', 'p2': './pframes/pframe00014.png', 'p3': './pframes/pframe00015.png', 'p4': './pframes/pframe00016.png', 'p5': './pframes/pframe00017.png', 'p6': './pframes/pframe00018.png', 'p7': './pframes/pframe00019.png', 'p8': './pframes/pframe00020.png', 'p9': './pframes/pframe00021.png', 'p10': './pframes/pframe00022.png', 'p11': './pframes/pframe00023.png', 'p12': './pframes/pframe00024.png'},
      {'p1': './pframes/pframe00025.png', 'p2': './pframes/pframe00026.png', 'p3': './pframes/pframe00027.png', 'p4': './pframes/pframe00028.png', 'p5': './pframes/pframe00029.png', 'p6': './pframes/pframe00030.png', 'p7': './pframes/pframe00031.png', 'p8': './pframes/pframe00032.png', 'p9': './pframes/pframe00033.png', 'p10': './pframes/pframe00034.png', 'p11': './pframes/pframe00035.png', 'p12': './pframes/pframe00036.png'},
      {'p1': './pframes/pframe00037.png', 'p2': './pframes/pframe00038.png', 'p3': './pframes/pframe00039.png', 'p4': './pframes/pframe00040.png', 'p5': './pframes/pframe00041.png', 'p6': './pframes/pframe00042.png', 'p7': './pframes/pframe00043.png', 'p8': './pframes/pframe00044.png', 'p9': './pframes/pframe00045.png', 'p10': './pframes/pframe00046.png', 'p11': './pframes/pframe00047.png', 'p12': './pframes/pframe00048.png'}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
    Routine retino_stim_loop
  LoopTerminator show_retino
